PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Data file delimiter = comma
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'group': '["1" ,"2"]'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = 1.0000, 1.0000, 1.0000
  expName = untitled_blocks
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine trial
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    CodeComponent timer
      Code Type = Auto->JS
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      Begin Routine:
        if trials.thisN == 0:
            session_timer = core.Clock()
      Each Frame:
        if session_timer.getTime() >= 900:
            continueRoutine = False
            trials.finished = True
    ImageComponent puzzles
      color = 1.0000, 1.0000, 1.0000
      image [set every repeat] = $stims
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
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    CodeComponent tag
      Code Type = Py
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      Begin Routine:
        import requests

        def tag(start_of_trial: bool, puzzle_id: int, condition: str, skip: bool):
            url = "http://localhost:8765/recording/tag"
            data = {
                "start_of_trial": start_of_trial,
                "puzzle_id": puzzle_id,
                "condition": condition,
                "skip": skip
            }
            request = requests.post(url, json=data)
            print(request.status_code, request.text)
            print(puzzle_id)

        #condition = 1 --> low_cl, condition = 2 --> high_cl
        tag(start_of_trial=True,
            puzzle_id=stims.replace("DFKI\\experiment_design\\stimuli\\", "").replace("high_cl\\tangram", "").replace("low_cl\\tangram", "").replace(".png", "").replace("(", "").replace(")", ""),
            condition=conds.replace("DFKI\\experiment_design\\conditions\\HighclBlock.xlsx", "2").replace("DFKI\\experiment_design\\conditions\\LowclBlock.xlsx", "1"),
            skip=False)
      End Routine:
        #condition = 1 --> low_cl, condition = 2 --> high_cl

        #end of the trial post request
        if trial_prog.keys == 's':
            tag(start_of_trial=False,
                puzzle_id=stims.replace("DFKI\\experiment_design\\stimuli\\", "").replace("high_cl\\tangram", "").replace("low_cl\\tangram", "").replace(".png", "").replace("(", "").replace(")", ""),
                condition=conds.replace("DFKI\\experiment_design\\conditions\\HighclBlock.xlsx", "2").replace("DFKI\\experiment_design\\conditions\\LowclBlock.xlsx", "1"),
                skip=True)
        elif trial_prog.keys == 'space':
            tag(start_of_trial=False,
                puzzle_id=stims.replace("DFKI\\experiment_design\\stimuli\\", "").replace("high_cl\\tangram", "").replace("low_cl\\tangram", "").replace(".png", "").replace("(", "").replace(")", ""),
                condition=conds.replace("DFKI\\experiment_design\\conditions\\HighclBlock.xlsx", "2").replace("DFKI\\experiment_design\\conditions\\LowclBlock.xlsx", "1"),
                skip=False)
    KeyboardComponent trial_prog
      allowedKeys [set every repeat] = 'space','s'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    TextComponent skip_msg
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 300
      text = press S to skip this puzzle
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  Routine welcome
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    TextComponent welcome_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Welcome to the Experiment!
        Thank you for participating.

        In this experiment, you will solve tangram puzzles. Tangram puzzles are blacked-out shapes that you recreate using the 7 differently shaped and colored small pieces. The goal is to match the outline of the blacked-out shape as closely as possible using the pieces at your disposal.

        If this sounds a bit tricky, don’t worry! We’ll start with a practice session where you’ll see some examples of how tangram puzzles work. After the practice session, the actual experiment will begin.

        Press SPACEBAR to see the experiment details.
    KeyboardComponent skip_welcome
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practice
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    TextComponent text_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.04
      pos [set every repeat] = msg_pos
      startVal [time (s)] = 0.5
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      text [set every repeat]:
        $msg
    ImageComponent practice_puzzles
      image [set every repeat] = $stims
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
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    KeyboardComponent practice_prog
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine bye
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    TextComponent bye_txt
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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      text:
        That's all!

        Thank you for your participation.
  Routine session_info
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    TextComponent session_inf
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $readymsg
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    KeyboardComponent start_session
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine exp_details
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    TextComponent details
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        The experiment has 2 sessions, and in each session: (1) You will have 15 minutes to solve as many puzzles as you can, (2) The timer starts when you begin the first puzzle, (3)  After 15 minutes, the session will end automatically, (4) At the end of each session, you’ll complete a short questionnaire. Please inform the experimenter when you finish a session.

        Important Notes: (1) Try to solve the puzzles CORRECTLY to the best of your ability, (2) After completing a puzzle, press SPACEBAR to move to the next one, (3) If you get stuck on a puzzle for more than 5 minutes, a message will appear saying, "Press S to skip this puzzle." You can skip or continue trying, (4) The experimenter will be in the room to answer any questions.

        When you’re ready to start the practice session, press SPACEBAR.
    KeyboardComponent skip_expdetails
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practice_info
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    TextComponent practice_inf
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Practice Session

        You will see 3 different puzzles as example and some information text with them. After each of the puzzle you will see their solution. You don't have to solve all of them but you can give it a try in the second puzzle to have a sense of tangram game.

        Press SPACEBAR to see the puzzles.
    KeyboardComponent skip_pracinfo
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine welcome
  Routine exp_details
  Routine practice_info
  LoopInitiator practice_trials loopType="TrialHandler"
    conditionsFile = DFKI/experiment_design/conditions/practice.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'stims': 'DFKI\\experiment_design\\stimuli\\practice\\tangram (81).png', 'msg': 'Sometimes the puzzle can look like just one of the pieces you have...', 'msg_pos': (0, 0.3)},
      {'stims': 'DFKI\\experiment_design\\stimuli\\practice\\tangram (80).png', 'msg': '...but it is composed by all the 7 pieces you have.', 'msg_pos': (0, -0.3)},
      {'stims': 'DFKI\\experiment_design\\stimuli\\practice\\tangram (79).png', 'msg': 'Sometimes the puzzle can look like it is not a complete shape...', 'msg_pos': (0, 0.3)},
      {'stims': 'DFKI\\experiment_design\\stimuli\\practice\\tangram (78).png', 'msg': "...but rather a random arrangement of all the 7 pieces and that's ok!", 'msg_pos': (0, -0.3)},
      {'stims': 'DFKI\\experiment_design\\stimuli\\practice\\tangram (86).png', 'msg': 'And sometimes the puzzle can also look like a complete shape...', 'msg_pos': (0, 0.3)},
      {'stims': 'DFKI\\experiment_design\\stimuli\\practice\\tangram (85).png', 'msg': "...that has been created by using all 7 pieces and that's ok too!", 'msg_pos': (0, -0.3)}]
    Routine practice
  LoopTerminator practice_trials
  LoopInitiator block loopType="TrialHandler"
    conditionsFile = $"DFKI\experiment_design\conditions\ChooseBlocks"+expInfo['group']+".xlsx"
    loopType = sequential
    nReps = 1
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    conditions:
      [{'conds': 'DFKI\\experiment_design\\conditions\\LowclBlock.xlsx', 'readymsg': 'some easy puzzles'},
      {'conds': 'DFKI\\experiment_design\\conditions\\HighclBlock.xlsx', 'readymsg': 'some hard puzzles'}]
    Routine session_info
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $conds
      loopType = sequential
      nReps = 1
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      Routine trial
    LoopTerminator trials
  LoopTerminator block
  Routine bye
